PsychoPy2experiment version="2020.2.2"
Settings
  Experiment info = {'participant': 'name', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Save log file = False
  Screen = 1
  Units = height
  Window size (pixels) = [1368, 912]
  expName = psych53stroop
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Routines
  Routine card_gen
    CodeComponent input_vocab
      Code Type = Auto->JS
      Begin Routine:
        waiting.append(Vocab(swa,eng))
  Routine choice
    MouseComponent choose_pile
      clickable = study_pile,test_pile,done_pile,unsorted_card
      forceEndRoutineOnPress = valid click
      saveMouseState = on click
      startVal [time (s)] = 0.0
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    PolygonComponent unsorted_card
      fillColor = $[1,1,1]
      pos = (-0.4, 0)
      shape = rectangle
      size = (0.6, 0.35)
      startVal [time (s)] = 0.0
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    PolygonComponent study_pile
      fillColor = $[1,1,1]
      pos = (0.5, 0.3)
      shape = rectangle
      size = (0.33, 0.2)
      startVal [time (s)] = 0.0
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    PolygonComponent test_pile
      fillColor = $[1,1,1]
      pos = (0.5, 0)
      shape = rectangle
      size = (0.33, 0.2)
      startVal [time (s)] = 0.0
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    PolygonComponent done_pile
      fillColor = $[1,1,1]
      pos = (0.5, -0.3)
      shape = rectangle
      size = (0.33, 0.2)
      startVal [time (s)] = 0.0
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    TextComponent study_pile_text
      color = black
      letterHeight = 0.05
      pos = (0.5, 0.3)
      startVal [time (s)] = 0.0
      text = Study
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    TextComponent test_pile_text
      color = black
      letterHeight = 0.05
      pos = (0.5, 0)
      startVal [time (s)] = 0.0
      text = Test
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    TextComponent done_pile_text
      color = black
      letterHeight = 0.05
      pos = (0.5, -0.3)
      startVal [time (s)] = 0.0
      text = Done
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    TextComponent unsorted_vocab
      color = black
      letterHeight = 0.05
      pos = (-0.4, 0)
      startVal [time (s)] = 0.0
      text [set every repeat] = $card_to_show
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    TextComponent study_size_text
      letterHeight = 0.05
      pos = (0.5, 0.18)
      startVal [time (s)] = 0.0
      text [set every repeat] = $("cards: "+str(len(study)))
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    TextComponent test_size_text
      letterHeight = 0.05
      pos = (0.5, -0.12)
      startVal [time (s)] = 0.0
      text [set every repeat] = $("cards: "+str(len(test)))
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    TextComponent done_size_text
      letterHeight = 0.05
      pos = (0.5, -0.42)
      startVal [time (s)] = 0.0
      text [set every repeat] = $("cards: "+str(size_at_start-len(waiting)))
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    TextComponent unsorted_size_text
      letterHeight = 0.05
      pos = (-0.4, -0.2)
      startVal [time (s)] = 0.0
      text [set every repeat] = $("cards: "+str(len(waiting)-i))
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    TextComponent instr_choice
      letterHeight = 0.05
      pos = (-.2, .4)
      startVal [time (s)] = 0.0
      text = Click on the card on the left to see a word pair. Then click on the card to the right to choose what to do with that word pair.
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  Routine pick_deck
    CodeComponent special_cases
      Code Type = Py
      Begin Routine:
        if len(waiting) == 0:
            trials.finished = True
            continueRoutine = False
        else:
            learn_method="unknown"
            if len(study) == 0:
                learn_method = "test"
                continueRoutine=False
            elif len(test) == 0:
                learn_method = "study"
                continueRoutine=False
    PolygonComponent study_first
      fillColor = $[1,1,1]
      pos = (-0.5, 0)
      shape = rectangle
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
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    PolygonComponent test_first
      fillColor = $[1,1,1]
      pos = (0.5, 0)
      shape = rectangle
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
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    TextComponent study_first_text
      color = black
      letterHeight = 0.1
      pos = (-0.5, 0)
      startVal [time (s)] = 0.0
      text = Study First
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    TextComponent test_first_text
      color = black
      letterHeight = 0.1
      pos = (0.5, 0)
      startVal [time (s)] = 0.0
      text = Test First
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    MouseComponent mouse_pick
      clickable = study_first,test_first
      forceEndRoutineOnPress = valid click
      saveMouseState = on click
      startVal [time (s)] = 0.0
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    TextComponent instr_pick
      letterHeight = 0.05
      pos = (0, 0.4)
      startVal [time (s)] = 0.0
      text = Which would you like to do first?
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  Routine interpret_pick
    CodeComponent which_deck
      Code Type = Py
      Begin Routine:
        if learn_method == "unknown":
            if study_first.contains(mouse_pick.getPos()):
                learn_method="study"
            else:
                learn_method="test"
  Routine interpret_choice
    CodeComponent which_pile
      Code Type = Py
      Begin Routine:
        if card_to_show == "" and unsorted_card.contains(choose_pile.getPos()):
            card_to_show=str(waiting[i].swahili+" - "+waiting[i].english)
        elif card_to_show != "":
            thisExp.addData("card_to_show",card_to_show)
            placed=True
            if study_pile.contains(choose_pile.getPos()): #clicked study
                study.append(waiting[i])
                i+=1
            elif test_pile.contains(choose_pile.getPos()): #clicked test
                test.append(waiting[i])
                i+=1
            elif done_pile.contains(choose_pile.getPos()): #clicked done
                waiting.pop(i)
            else:
                placed=False
            if placed:
                if len(study)+len(test)==len(waiting): #cards have all been chosen
                    choices.finished=True
                else: #more cards to go
                    card_to_show=""
  Routine show_answer
    CodeComponent show
      Code Type = Py
      Begin Routine:
        if learn_method != "test" or len(test)==0:
            continueRoutine = False
        else:
            #store data on correctness of userinput
            thisExp.addData("test_response.stim",card_to_show)
            thisExp.addData("test_response.resp",userinput)
            if userinput == test[active_cards[card_index]].english:
                thisExp.addData("test_response.eval","correct")
            else:
                thisExp.addData("test_response.eval","incorrect")

            #set correct text
            card_to_show = str(test[active_cards[card_index]].swahili+
                " - "+test[active_cards[card_index]].english)

            #remove this card from active cards
            active_cards.pop(card_index)

            #if the user didn't want to see the answer skip that part
            if no.contains(yes_or_no.getPos()):
                continueRoutine=False
    TextComponent correct_text
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
      text [set every repeat] = $card_to_show
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    TextComponent user_text
      letterHeight = 0.1
      pos = (0, 0.3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
      text [set every repeat] = $("your answer: "+userinput)
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  Routine testing
    CodeComponent get_test_card
      Code Type = Py
      Begin Routine:
        if learn_method != "test" or len(test)==0:
            test_loop.finished = True
            continueRoutine = False
        else:
            card_index = randint(len(active_cards))
            card_to_show = test[active_cards[card_index]].swahili
    CodeComponent input
      Code Type = Py
      Begin Routine:
        event.clearEvents("keyboard")
        userinput = ""
      Each Frame:
        keys = event.getKeys()
        if keys:
            if keys[0].isalpha() and len(keys[0])==1:
                userinput+=keys[0].upper()
            elif keys[0] == "backspace":
                userinput=userinput[0:-1]
            elif keys[0] == "escape":
                win.close()
                core.quit()
            elif keys[0] == "return" and \
                core.getTime() - duration_start > 0.25 and \
                len(userinput)>0:
                continueRoutine=False
    PolygonComponent testcard
      fillColor = $[1,1,1]
      pos = (0, 0.2)
      shape = rectangle
      size = (0.7, 0.42)
      startVal [time (s)] = 0.0
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    PolygonComponent text_box
      fillColor = $[1,1,1]
      pos = (0, -0.3)
      shape = rectangle
      size = (0.7, 0.1)
      startVal [time (s)] = 0.0
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    TextComponent testcard_text
      color = black
      letterHeight = 0.05
      pos = (0, 0.2)
      startVal [time (s)] = 0.0
      text [set every repeat] = $card_to_show
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    TextComponent input_text
      color = black
      letterHeight = 0.05
      pos = (0, -0.3)
      startVal [time (s)] = 0.0
      text [set every frame] = $userinput
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    CodeComponent testing_duration
      Code Type = Py
      Begin Routine:
        duration_start=core.getTime()
      End Routine:
        thisExp.addData("duration",core.getTime()-duration_start)
  Routine studying
    CodeComponent get_study_card
      Code Type = Py
      Begin Routine:
        if learn_method != "study" or len(study)==0:
            study_loop.finished = True
            continueRoutine = False
        else:
            card_index = randint(len(active_cards))
            card_to_show = str(study[active_cards[card_index]].swahili+
            " - "+study[active_cards[card_index]].english)
            thisExp.addData("card_to_show",card_to_show)
            active_cards.pop(card_index)
    PolygonComponent studycard
      fillColor = $[1,1,1]
      shape = rectangle
      size = (0.7, 0.42)
      startVal [time (s)] = 0.0
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    TextComponent studycard_text
      color = black
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text [set every repeat] = $card_to_show
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    KeyboardComponent next_study
      allowedKeys = 'return'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    TextComponent study_instr
      letterHeight = 0.05
      pos = (0, 0.3)
      startVal [time (s)] = 0.0
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  Routine change_method
    CodeComponent flip
      Code Type = Py
      Begin Routine:
        if learn_method == "study":
            learn_method = "test"
        elif learn_method == "test":
            learn_method = "study"
  Routine initialize_trial
    CodeComponent initialize
      Code Type = Auto->JS
      Begin Routine:
        study = []
        test = []
        i=0
        card_to_show=""
        size_at_start=len(waiting)
  Routine init_active_cards
    CodeComponent init_active
      Code Type = Py
      Begin Routine:
        if learn_method == "study":
            active_cards = list(range(0,len(study)))
        else:
            active_cards = list(range(0,len(test)))
  Routine cond_gen
    VariableComponent conditions
      startExpValue = dict()
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    CodeComponent cond_gen_code
      Code Type = Py
      Begin Routine:
        conditions[condition]=cond_text
  Routine ready
    TextComponent ready_to_continue
      color = $[0,1,0]
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      text = You will now begin the test phase of this study. Press 'enter' to continue. 
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    KeyboardComponent return_to_exp
      allowedKeys = 'return'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine instr_study
    CodeComponent skip_instr_study
      Code Type = Py
      Begin Routine:
        if learn_method != "study" or len(study)==0:
            continueRoutine = False
    TextComponent instr_study_text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text = For the study trials, you will see the Swahili-English translations one at a time. When you are ready to move on to the next trial, press "enter".
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    KeyboardComponent key_instr_study
      allowedKeys = 'return'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine instr_test
    CodeComponent skip_instr_test
      Code Type = Py
      Begin Routine:
        if learn_method != "test" or len(test)==0:
            continueRoutine = False
    TextComponent instr_test_text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text = For the test trials, please type in the Swahili translation for the English word. Press "enter" to move on to the next trial. You can keep all the words lower-case. 
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    KeyboardComponent key_instr_test
      allowedKeys = 'return'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine show_answer_prompt
    CodeComponent skip_prompt
      Code Type = Py
      Begin Routine:
        if learn_method != "test" or len(test)==0:
            continueRoutine = False
    PolygonComponent no
      fillColor = $[1,1,1]
      pos = (-0.5, 0)
      shape = rectangle
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
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    PolygonComponent yes
      fillColor = $[1,1,1]
      pos = (0.5, 0)
      shape = rectangle
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
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    TextComponent would_you_like
      letterHeight = 0.05
      pos = (0, 0.4)
      startVal [time (s)] = 0.0
      text = Would you like to see the correct answer?
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    MouseComponent yes_or_no
      clickable = no,yes
      forceEndRoutineOnPress = valid click
      saveMouseState = on click
      startVal [time (s)] = 0.0
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    TextComponent no_text
      color = black
      letterHeight = 0.1
      pos = (-0.5, 0)
      startVal [time (s)] = 0.0
      text = No
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    TextComponent yes_text
      color = black
      letterHeight = 0.1
      pos = (0.5, 0)
      startVal [time (s)] = 0.0
      text = Yes
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  Routine instr_assess
    TextComponent instr_assess_text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text = Please type in the Swahili translation for the English word in the space below. You can keep all the words lower case. Select "enter" to move on to the next trial.
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    KeyboardComponent instr_assess_key
      allowedKeys = 'return'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine assess
    CodeComponent assess_code
      Code Type = Py
      End Routine:
        #store data on correctness of userinput
        thisExp.addData("test_response.resp",userinput)
        if userinput == swa:
            thisExp.addData("test_response.eval","correct")
        else:
            thisExp.addData("test_response.eval","incorrect")
    CodeComponent assess_input
      Code Type = Py
      Begin Routine:
        event.clearEvents("keyboard")
        userinput = ""
      Each Frame:
        keys = event.getKeys()
        if keys:
            if keys[0].isalpha() and len(keys[0])==1:
                userinput+=keys[0].upper()
            elif keys[0] == "backspace":
                userinput=userinput[0:-1]
            elif keys[0] == "escape":
                win.close()
                core.quit()
            elif keys[0] == "return" and \
                core.getTime() - duration_start > 0.25 and \
                len(userinput)>0:
                continueRoutine=False
    PolygonComponent assess_card
      fillColor = $[1,1,1]
      pos = (0, 0.2)
      shape = rectangle
      size = (0.7, 0.42)
      startVal [time (s)] = 0.0
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    PolygonComponent assess_text_box
      fillColor = $[1,1,1]
      pos = (0, -0.3)
      shape = rectangle
      size = (0.7, 0.1)
      startVal [time (s)] = 0.0
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    TextComponent assess_card_text
      color = black
      letterHeight = 0.05
      pos = (0, 0.2)
      startVal [time (s)] = 0.0
      text [set every repeat] = $swa
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    TextComponent assess_input_text
      color = black
      letterHeight = 0.05
      pos = (0, -0.3)
      startVal [time (s)] = 0.0
      text [set every frame] = $userinput
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    CodeComponent assess_duration
      Code Type = Py
      Begin Routine:
        duration_start=core.getTime()
      End Routine:
        thisExp.addData("duration",core.getTime()-duration_start)
  Routine transfer
    VariableComponent picked
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    VariableComponent correct
      startRoutineValue = randint(3)
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    CodeComponent validate
      Code Type = Py
      End Routine:
        if a.contains(select_word.getPos()):
            picked=a_text
        elif b.contains(select_word.getPos()):
            picked=b_text
        else:
            picked=c_text

        thisExp.addData("transfer_response.resp",picked.text)
        if (correct == 0 and picked==a_text) or (correct == 1 and picked==b_text) or (correct == 2 and picked==c_text):
            thisExp.addData("transfer_response.eval","correct")
        else:
            thisExp.addData("transfer_response.eval","incorrect")
    CodeComponent set_up_answers
      Code Type = Py
      Begin Routine:
        def getOther(taken):
            while True:
                possible = answers[randint(len(answers))]
                for answer in taken:
                    if possible == answer:
                        possible = ""
                if possible != "":
                    return possible

        if correct == 0:
            a_text.setText(ans)
            b_text.setText(getOther([a_text.text]))
            c_text.setText(getOther([a_text.text,b_text.text]))
        elif correct == 1:
            b_text.setText(ans)
            a_text.setText(getOther([b_text.text]))
            c_text.setText(getOther([b_text.text,a_text.text]))
        elif correct == 2:
            c_text.setText(ans)
            a_text.setText(getOther([c_text.text]))
            b_text.setText(getOther([c_text.text,a_text.text]))
    PolygonComponent a
      fillColor = $[1,1,1]
      pos = (-0.5, -0.3)
      shape = rectangle
      size = (0.4, 0.2)
      startVal [time (s)] = 0.0
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    PolygonComponent b
      fillColor = $[1,1,1]
      pos = (0, -0.3)
      shape = rectangle
      size = (0.4, 0.2)
      startVal [time (s)] = 0.0
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    PolygonComponent c
      fillColor = $[1,1,1]
      pos = (0.5, -0.3)
      shape = rectangle
      size = (0.4, 0.2)
      startVal [time (s)] = 0.0
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    TextComponent a_text
      color = black
      letterHeight = 0.05
      pos = (-0.5, -0.3)
      startVal [time (s)] = 0.0
      text = atext
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    TextComponent b_text
      color = black
      letterHeight = 0.05
      pos = (0, -0.3)
      startVal [time (s)] = 0.0
      text = btext
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    TextComponent c_text
      color = black
      letterHeight = 0.05
      pos = (0.5, -0.3)
      startVal [time (s)] = 0.0
      text = btext
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    TextComponent sentence
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text [set every repeat] = $sen
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    TextComponent instr_transfer
      letterHeight = 0.05
      pos = (0, 0.3)
      startVal [time (s)] = 0.0
      text = Choose the Swahili word that would complete this English sentence.
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    MouseComponent select_word
      clickable = a,b,c
      forceEndRoutineOnPress = valid click
      saveMouseState = on click
      startVal [time (s)] = 0.0
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  Routine finish
    TextComponent text_2
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 15
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      text:
        Thank you for participating!

        Please return to the email to complete your participation in this study. Press 'ENTER'
    KeyboardComponent key_resp_3
      allowedKeys = 'y','n','left','return','space'
      forceEndRoutine = True
      startVal [time (s)] = 2
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  Routine ans_gen
    CodeComponent add_ans
      Code Type = Py
      Begin Routine:
        answers.append(ans)
  Routine Instr
    CodeComponent imports
      Code Type = Auto->JS
      Begin Experiment:
        from datetime import timedelta
        from datetime import datetime
        from os.path import exists
    CodeComponent vocab_class
      Code Type = Auto->JS
      Begin Experiment:
        class Vocab:
            def __init__(self,swahili,english):
                self.swahili=swahili
                self.english=english
    VariableComponent waiting
      startExpValue = []
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    VariableComponent study
      startExpValue = []
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    VariableComponent test
      startExpValue = []
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    VariableComponent learn_method
      startExpValue = "study"
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    VariableComponent card_to_show
      startExpValue = "Card not found"
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    VariableComponent i
      startExpValue = 0
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    VariableComponent userinput
      startExpValue = ""
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    VariableComponent active_cards
      startExpValue = []
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    VariableComponent card_index
      startExpValue = 0
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    VariableComponent size_at_start
      startExpValue = len(waiting)
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    VariableComponent answers
      startExpValue = []
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    VariableComponent iteration
      startExpValue = 'a'
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    VariableComponent duration_start
      saveEndRoutine = False
      startRoutineValue = "this parameter doesn't actually work"
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    KeyboardComponent done_with_instructions
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    ImageComponent instructions
      image = cond1.jpg
      size = (1,0.6)
      startVal [time (s)] = 0.0
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  Routine timer
    VariableComponent timer_length
      startExpValue = 15
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    TextComponent countdown
      letterHeight = 0.1
      stopVal [condition] = $(timer_length-(datetime.now()-start).seconds)<0
      text [set every frame] = $str(timedelta(seconds=(timer_length-(datetime.now()-start).seconds)))
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  Routine inst_transfer
    TextComponent instr_transfer_text
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      text = In the next part of the test, you will choose the Swahili word that completes the English sentence.
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    KeyboardComponent instr_transfer_key
      allowedKeys = 'return'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine dothis
    TextComponent text
      letterHeight = 0.04
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      text:
        We will now begin with the learning phase.

        Please make sure to sort your word-cards into the study or test categories.

        If you feel confident about the word and its translation, put the word in the finish pile.

        Please take a moment to put your phone on Do Not Disturb or to put it away.

        PRESS 'Enter' TO CONTINUE
    KeyboardComponent key_resp
      allowedKeys = 'y','n','left','return','space'
      forceEndRoutine = True
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  Routine movie
    MovieComponent movie_2
      backend = moviepy
      forceEndRoutine = True
      movie = movie.mp4
      size = (1680,1050)
      startVal [time (s)] = 1
      units = pix
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  Routine consent
    TextComponent consents
      font = Times New Roman
      letterHeight = 0.03
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      text:
        LETTER OF CONSENT
        Dear participant:

        This quarter, under the direction of Professor Simone in the Department of Psychology at Santa Clara University, we are conducting a research study to examine learning strategies and remembering in college students.

        We are requesting your participation, which will involve learning 20 English-Swahili translations on a computer and will take no more than one hour of your time. Your participation in this study is voluntary.  If you choose not to participate or to withdraw from the study at any time, there will be no penalty. It will not affect your grade. The results of the research study may be published, but your name will not be used.

        Although there may be no direct benefit to you, the possible benefit of your participation is better understanding of strategies students choose to use when learning something new.

        If you have any questions concerning the research study, please call Dr. Simone at (408) 554 – 4577.
        If you have any questions about your rights as a subject/participant in this research, or if you feel you have been placed at risk, you can contact the Chair of the Human Subjects Committee, through the Office of Research Compliance and Integrity at (408) 554-5591.

        By pressing “Enter”, which will begin to run the computer program, you certify that you are at least 18 years old and are giving consent to participate in the study described here.
    KeyboardComponent key_resp_2
      allowedKeys = 'y','n','left','return','enter'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine stroop_start
    KeyboardComponent key_filler
      allowedKeys = 'return'
      forceEndRoutine = True
      startVal [time (s)] = 0.4
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    TextComponent instrr
      letterHeight = 0.08
      startVal [time (s)] = 0.0
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      text:
        Hey Psych 53!

        We will now begin a short 5-10 minute StroopTask.

        Please pay attention to the following instructions.

        Press 'ENTER' to start.
  Routine target
    TextComponent popup
      color [set every repeat] = $color
      letterHeight = 0.14
      startVal [time (s)] = 0.3
      text [set every repeat] = $word
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    KeyboardComponent key_resp_4
      allowedKeys = 'down','up','left','right','space'
      correctAns = $CorrAns
      forceEndRoutine = True
      startVal [time (s)] = 0.4
      storeCorrect = True
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    TextComponent key
      letterHeight = 0.05
      pos = (0,0.4)
      startVal [time (s)] = 0.1
      text [set every repeat] = Red=UP  Green=DOWN Blue=LEFT Yellow=RIGHT 
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  Routine aboutstroop
    TextComponent text_3
      letterHeight = 0.04
      startVal [time (s)] = 0.0
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      text:
        A stroop test is a is a neuropsychological test extensively used to assess the ability to inhibit cognitive interference that occurs when the processing of a specific stimulus feature impedes the simultaneous processing of a second stimulus attribute, well-known as the Stroop Effect.

        In this task, you will focus on the COLOR of the word and press the key that corresponds to that color as fast as possible. (Either press : up, down, right, left, or space)  You will get 5 seconds to respond to the stimuli, so make sure you avoid distractions.

        You are encouraged to take a bit a time right now to learn  the key. Press enter to start the task.

        Red=UP  Green=DOWN Blue=LEFT Yellow=RIGHT
    KeyboardComponent key_resp_5
      allowedKeys = 'return','space'
      forceEndRoutine = True
      startVal [time (s)] = 1
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Flow
  Routine stroop_start
  Routine aboutstroop
  LoopInitiator trials_2 loopType="TrialHandler"
    conditionsFile = stroop.xlxs.xlsx
    loopType = random
    nReps = 2
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    conditions:
      [OrderedDict([('word', 'red'), ('color', 'blue'), ('CorrAns', 'left')]),
      OrderedDict([('word', 'green'), ('color', 'blue'), ('CorrAns', 'left')]),
      OrderedDict([('word', 'blue'), ('color', 'blue'), ('CorrAns', 'left')]),
      OrderedDict([('word', 'yellow'), ('color', 'blue'), ('CorrAns', 'left')]),
      OrderedDict([('word', 'red'), ('color', 'blue'), ('CorrAns', 'left')]),
      OrderedDict([('word', 'blue'), ('color', 'blue'), ('CorrAns', 'left')]),
      OrderedDict([('word', 'red'), ('color', 'green'), ('CorrAns', 'down')]),
      OrderedDict([('word', 'green'), ('color', 'green'), ('CorrAns', 'down')]),
      OrderedDict([('word', 'blue'), ('color', 'green'), ('CorrAns', 'down')]),
      OrderedDict([('word', 'yellow'), ('color', 'green'), ('CorrAns', 'down')]),
      OrderedDict([('word', 'red'), ('color', 'green'), ('CorrAns', 'down')]),
      OrderedDict([('word', 'blue'), ('color', 'green'), ('CorrAns', 'down')]),
      OrderedDict([('word', 'red'), ('color', 'red'), ('CorrAns', 'up')]),
      OrderedDict([('word', 'green'), ('color', 'red'), ('CorrAns', 'up')]),
      OrderedDict([('word', 'blue'), ('color', 'red'), ('CorrAns', 'up')]),
      OrderedDict([('word', 'yellow'), ('color', 'red'), ('CorrAns', 'up')]),
      OrderedDict([('word', 'red'), ('color', 'red'), ('CorrAns', 'up')]),
      OrderedDict([('word', 'blue'), ('color', 'red'), ('CorrAns', 'up')]),
      OrderedDict([('word', 'red'), ('color', 'yellow'), ('CorrAns', 'right')]),
      OrderedDict([('word', 'green'), ('color', 'yellow'), ('CorrAns', 'right')]),
      OrderedDict([('word', 'blue'), ('color', 'yellow'), ('CorrAns', 'right')])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
    Routine target
  LoopTerminator trials_2
  Routine finish
